PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  expName = conSearch2
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Routines
  Routine trial1
    ImageComponent target
      image = images/redVer.jpg
      ori = 1
      pos = [0.4,-0.6]
      size = (0.03, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = norm
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    ImageComponent dist1
      image = images/redVer.jpg
      pos = [-0.6,0.3]
      size = [0.15,0.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = norm
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    CodeComponent code
      Code Type = Auto->JS
      End Routine:
        win.getMovieFrame()
        win.saveMovieFrames("unsw_logo_blend_example.png")
    ImageComponent dist2
      image = images/redVer.jpg
      pos = (0, 0.6)
      size = (0.03, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = norm
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    ImageComponent dist3
      image = images/redVer.jpg
      pos = (-0.6, 0.6)
      size = [0.15,0.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = norm
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Flow
  Routine trial1
