PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  expName = conSearch3green
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Routines
  Routine trial1
    CodeComponent code
      Code Type = Auto->JS
      End Routine:
        win.getMovieFrame()
        win.saveMovieFrames("unsw_logo_blend_example.png")
    PolygonComponent targGreenVer
      fillColor = $[-1,1,-1]
      lineColor = $[-1,1,-1]
      lineWidth = 0
      pos = (4,8)
      shape = rectangle
      size = (1, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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    PolygonComponent dist1
      fillColor = $[1,-1,-1]
      lineWidth = 0
      pos = (0, -8)
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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    PolygonComponent dist2
      fillColor = $[-1,1,-1]
      lineWidth = 0
      pos = (8,4)
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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    PolygonComponent dist3
      fillColor = $[1,-1,-1]
      lineWidth = 0
      pos = (4,0)
      shape = rectangle
      size = (1, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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Flow
  Routine trial1
