PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = exp2
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (53, 30)
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent image_2
      image [set every repeat] = $ImageFile
      opacity = 0
      pos [set every repeat] = $tarPos
      size = (6, 2)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
      Begin Routine:
        win.mouseVisible = False
  Routine mouseClick
    ImageComponent image_3
      image [set every repeat] = $ImageFile
      opacity = 0
      pos [set every repeat] = $tarPos
      size = (6, 2)
      startVal [time (s)] = 0.0
      units = cm
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    MouseComponent mouse
      clickable = image_3,background
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      timeRelativeTo = routine
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    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        win.mouseVisible = True
    ImageComponent background
      image [set every repeat] = $ImageFile
      opacity = 0
      size = (53, 30)
      startVal [time (s)] = 0.0
      units = cm
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  Routine instructions
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Look for red horizontal bar (target).
        Press space bar as soon as you found the target.
        The search array willl disappear when you press space bar.
        Point with the mouse coursor the place on the screen where you think the target was.
        Press space bar to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('ImageFile', '0_dist_red/trial1.png'), ('tarPos', [8, 8])]),
      OrderedDict([('ImageFile', '0_dist_red/trial2.png'), ('tarPos', [-4, 0])]),
      OrderedDict([('ImageFile', '0_dist_red/trial3.png'), ('tarPos', [-8, 8])]),
      OrderedDict([('ImageFile', '0_dist_red/trial4.png'), ('tarPos', [0, -4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial5.png'), ('tarPos', [8, -8])]),
      OrderedDict([('ImageFile', '0_dist_red/trial6.png'), ('tarPos', [-4, 8])]),
      OrderedDict([('ImageFile', '0_dist_red/trial7.png'), ('tarPos', [0, 0])]),
      OrderedDict([('ImageFile', '0_dist_red/trial8.png'), ('tarPos', [4, -8])]),
      OrderedDict([('ImageFile', '0_dist_red/trial9.png'), ('tarPos', [8, 0])]),
      OrderedDict([('ImageFile', '0_dist_red/trial10.png'), ('tarPos', [8, 4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial11.png'), ('tarPos', [4, 4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial12.png'), ('tarPos', [4, -4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial13.png'), ('tarPos', [-4, 4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial14.png'), ('tarPos', [0, 8])]),
      OrderedDict([('ImageFile', '0_dist_red/trial15.png'), ('tarPos', [4, 0])]),
      OrderedDict([('ImageFile', '0_dist_red/trial16.png'), ('tarPos', [-8, 4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial17.png'), ('tarPos', [-8, 0])]),
      OrderedDict([('ImageFile', '0_dist_red/trial18.png'), ('tarPos', [-4, -4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial19.png'), ('tarPos', [8, -4])]),
      OrderedDict([('ImageFile', '0_dist_red/trial20.png'), ('tarPos', [0, 4])])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
    Routine trial
    Routine mouseClick
  LoopTerminator trials
