PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = exp5
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (53, 30)
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent image_2
      image [set every repeat] = $ImageFile
      opacity = 0
      pos [set every repeat] = $tarPos
      size = (6, 2)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
      Begin Routine:
        win.mouseVisible = False
  Routine mouseClick
    ImageComponent image_3
      image [set every repeat] = $ImageFile
      opacity = 0
      pos [set every repeat] = $tarPos
      size [set every repeat] = $tarSize
      startVal [time (s)] = 0.0
      units = cm
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    MouseComponent mouse
      clickable = image_3,background,whiteSquare
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      timeRelativeTo = routine
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        numClicked=len(mouse.clicked_name);
        print(numClicked)
        if numClicked == 2:
            feedbackTxt = 'Your answer was correct.'
        else:
            feedbackTxt = 'You did not click on the target. Try to be more accurate.'
    ImageComponent background
      image [set every repeat] = $ImageFile
      opacity = 0
      size = (53, 30)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent whiteSquare
      fillColor = $[1,1,1]
      pos = (0.8, -0.8)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine instructions
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructionText
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedbackTxt
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackTxt='You di not click on the target. Try to be more accurate.'
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = chooseBlocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'conGreen.xlsx'), ('targName', 'green vertical'), ('instructionText', 'Look for green horizontal target')]),
      OrderedDict([('condsFile', 'conRed.xlsx'), ('targName', 'red horizontal'), ('instructionText', 'Look for red target')])]
    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
      Routine mouseClick
      Routine Feedback
    LoopTerminator trials
  LoopTerminator trials_2
